PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'sound': '1', 'participant': '999', 'medium gabor': '0', 'high': '15', 'rotate positions': '1', 'flickering cue': '1', 'low': '4', 'eeg': '0', 'looming fixation': '1', 'intro': '1', 'jumper': '1', 'EEG': '1', 'Chemicum': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1600, 900]
  expName = UR_ssvep_19_stairs_CALIB_bayes
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Routines
  Routine pred_event
    CodeComponent code_prediction
      Code Type = Py
      Begin Experiment:
        xys = []
        fliCue = 0 # need it? cft = 0
        cueText = '?'
      Begin Routine:
        # TRIGGER: start stim
        triggers(expInfo, cueText, 2,0)

        # this value will be read by the drawGabors() function and enables fill-in cue
        # presentation if set to 1
        fliCue = 0

        # prediction duration
        # shuffle(pred_durs)
        # pred_duration = int(pred_durs[0])

        # timing tests
        lastT = t
        #print('prediction')
        sumOfCount = 0
        frameDurSum = 0
      Each Frame:
        # this bit is just for timing test
        frameDuration = t - lastT
        lastT = t
        sumOfCount += 1
        frameDurSum +=  frameDuration
        #print(frameDuration)

        # TRIGGER: start prediction (show on screen)
        # triggers(expInfo, cueText, 2,0)

        # draw/send the trigger
        if int(expInfo[ 'eeg' ]):
            trigger.draw()

        # present the fixation
        if int(expInfo[ 'looming fixation' ]):
            fixSize = (t/8, t/8)
        else:
            fixSize = (0.3, 0.3)

        # draw the background gabors and fill-in (drawGabors() gets defined in ITI routine)
        drawGabors(expInfo,t, frameN, low_freq, high_freq, annulusOri,cueText, fliCue,0,pred_duration)
      End Routine:
        # this bit is just for timing test
        refR = float(sumOfCount)/float(frameDurSum)
        #print(refR)
        thisExp.addData('prediction refR', refR) # write average srate to the file
    PolygonComponent fix_prediction
      durationEstim = 2
      fillColor = $[0.1,0.1,0.1]
      lineWidth = 0
      nVertices = 50
      shape = regular polygon...
      size [set every frame] = fixSize
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = pred_duration
      units = deg
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  Routine pause
    CodeComponent code_pause
      Code Type = Py
      Begin Experiment:
        pauseCounter = 0

        pauseMsg = ' '

        pauseMsgText = visual.TextStim(win, pauseMsg,
        pos=(0, -5.5), units='deg',color=[1,1,1], height = 1,
        bold=False, colorSpace='rgb', italic = True, wrapWidth=35)
      Begin Routine:
        # trigger 10 is pause
        trigRGB = [rgbValsCondition[1], rgbValsRoutine[0], rgbValsResp[0]]
        msgTrigger = str(trigValOutRed[1]+trigValOutGreen[0]+trigValOutBlue[0])
        trigger.fillColor = trigRGB


        if trials.thisN > 2:
        # only pause for a rest on every 30th trial:
            if  trials.thisN %  30  !=  0: #
                continueRoutine =  False # so don’t run the pause routine this time.
            else:
                pauseCounter = pauseCounter + 1
        else:
            continueRoutine =  False



        pauseTxt = "This is a pause. Press any key to continue...\n\
        \nPercent correct: "

        pauseTxt2 = '\n\nEstimated time until the end of the experiment: '

        soundNotPlayed = 1
        currentTime = core.getTime()
        timePassed = currentTime - expStartTime

        trialRatio = nTrials/(trials.thisN+1)
        expDuration = trialRatio * timePassed
        timeLeft = round((expDuration - timePassed)/60)
      Each Frame:
        # draw/send the trigger
        if int(expInfo[ 'eeg' ]):
            trigger.draw()

        if int(pauseCounter) == 1:
            pauseMsg = 'Did you know?\n\n\
        \nThe first recording of a human electroencephalography is often attributed to a German psychiatrist Hans Berger (around 1920s). He is also well known for his discovery of the alpha wave or sometimes called “Breger wave”. What is less known, is how he got involved with EEG in the first place. To be continued…'
            pauseMsgText.setText(pauseMsg)
            pauseMsgText.draw()
        elif int(pauseCounter) == 2:
            pauseMsg = 'Did you know?\n\n\
            \nThe story goes that Hans Berger got interested in EEG because he believed to have experienced spontaneous telepathy with her sister. He reasoned that if it was truly telepathy, recording the electrical activity of the brain might help to bring light to the mechanisms of it. Maybe this belief is to be blamed or something else, but his recordings of the alpha wave were left relatively unnoticed by other investigators for another decade or so. To be continued…'
            pauseMsgText.setText(pauseMsg)
            pauseMsgText.draw()
        elif int(pauseCounter) == 3:
            pauseMsg = 'Did you know?\n\n\
            \nHans Berger’s work was later picked up by English investigator, Edgar Douglas Adrian, who was awarded for the Nobel prize with another investigator Sir Charles Sherrington, for their discoveries regarding the functions of neurons. One of the things that they investigated was all-or-nothing principle in the nerve cells.'
            pauseMsgText.setText(pauseMsg)
            pauseMsgText.draw()
        elif int(pauseCounter) == 4:
            pauseMsg = 'Did you know?\n\n\
            \nThe same guy, Edgar Douglas Adrian, who replicated Hans Berger\'s findings, was also involved in another matter close to the hearts of the researchers involved in the current experiment. He described something that in today’s terms would be called "steady-state visual evoked potentials", which is a fancy term used to describe brains frequency specific response to a visual flicker.'
            pauseMsgText.setText(pauseMsg)
            pauseMsgText.draw()
        elif int(pauseCounter) == 5:
            pauseMsg = 'Did you know?\n\n\
            \nResearchers are using the Fourier transformation to analyse brain responses to the flickering stimuli, but also in more standard filtering. This method dates back to 19th century French mathematician, Jean-Baptiste Joseph Fourier. He came up with an idea that any signal could be represented as a collection of sinusoidal waves without losing any information. Or as somebody quite nicely but it, Fourier transform tells you what frequencies are present in your signal and in what proportions.'
            pauseMsgText.setText(pauseMsg)
            pauseMsgText.draw()
        elif int(pauseCounter) == 6:
            pauseMsg = 'Did you know?\n\n\
            \nFourier transformation, that at the time of Jean-Baptiste, attracted attention by few mathematics enthusiasts, is now widely used method for analysing signals across the disciplines, sprinkling from genetics to quantum mechanics, but has also found it’s way into practical applications and gadgets that we use every day.'
            pauseMsgText.setText(pauseMsg)
            pauseMsgText.draw()
        elif int(pauseCounter) == 7:
            pauseMsg = 'Did you know?\n\n\
            \nThere are a huge number of nerve cells in the brain. According to best of our estimates, this number is around 86 billion (give or take 8 billion). It is often said, to bring that number into perspective, that this is about the same as the number of the stars in the Milky Way galaxy. Latest estimates taught us, that there might be up to 400 billion stars in our galaxy. So lets try to update the popular statement. There are up to as many stars in the Milky Way galaxy as there are nerve cells in the brains of you and your three friends combined. Sounds catchy, doesn\'t it? If you did the math, you found that there is a little miscalculation. I\'d take it as a compliment :)'
            pauseMsgText.setText(pauseMsg)
            pauseMsgText.draw()
        elif int(pauseCounter) == 8:
            pauseMsg = 'Did you know?\n\n\
            \nWelcome to the department of psychology at the University of York! The department holds it’s roots in the year 1974 when Founding Head of Department Peter Venables appointed the first lecturers. He helped to pioneer the application of physiological measures to psychological problems, paving the way into the top class research in biological basis of psychology and behaviour. '
            pauseMsgText.setText(pauseMsg)
            pauseMsgText.draw()
    TextComponent text_pause
      letterHeight = 1
      pos = (0, 5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pauseTxt + str(int(np.mean(correctResps)*100)) + str(' %') + pauseTxt2 + str(timeLeft) + str(' minutes')
      units = deg
      wrapWidth = 35
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    KeyboardComponent any_key_end_pause
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine intro_staires
    TextComponent text_2
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = This is just a test...
      units = deg
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  Routine ITI
    CodeComponent code_fix
      Code Type = Py
      Begin Experiment:
        trialCounter = 0
      Begin Routine:
        # TRIGGER: start ITI
        if int(expInfo[ 'eeg' ]):
            my_device.updateRegisterCache()

        # RGB values are hard coded, because the value of the ITI
        # trigger do not depend on the trial information (its always 8)
        #trigRGB = [0, 0, rgbValsBlue[1]]
        #trigger.fillColor = trigRGB
        #msgTrigger = str(trigValOutBlue[1])

        # trig Tartu

        #trigN = '11'+ trigdic[cueText] + trigdic[frex] + trigdic['iti']


        # set fixation duration randomly 0.5,1 or 1.5 s
        shuffle(fix_durs)
        fixation_duration = int(fix_durs[0])

        #give a random orientation to target gratings
        orients = randint(1,360) # randint(1,360)
        annulusOri = orients + 90# 0 # this variable can be used to change the background
        # grating orientations on each trial
        fliCue = 0 # if this is set zero no fill-in will be presented

        trialCounter += 1

        # this bit is just for timing test
        lastT = 0
        #print('ITI')

        sumOfCount = 0
        frameDurSum = 0
      Each Frame:
        # this bit is just for timing test
        frameDuration = t - lastT
        lastT = t
        sumOfCount += 1
        frameDurSum +=  frameDuration

        # draw/send the trigger
        #if int(expInfo[ 'eeg' ]):
        #    trigger.draw()

        # draw the background gabors and fill-in (drawGabors() gets defined in ITI routine)
        drawGabors(expInfo,t, frameN,low_freq, high_freq, annulusOri, cueText, fliCue,0,fixation_duration)

        # this calls the trigNum function (see ITI code_fix: Begin Experiment)
        #trigNum(win, msgTrigger)

        # Tartu
        #sendTrigger(t, trigN, expInfo['EEG'])
      End Routine:
        # this bit is just for timing test
        refR = float(sumOfCount)/float(frameDurSum)
        #print(refR)
        thisExp.addData('iti refR', refR) # write average srate to the file
    PolygonComponent ellips_fix
      durationEstim = 1
      fillColor [set every frame] = $[0.1,0.1,0.1]
      lineColor = $[0.8,0.8,0.8]
      lineWidth = 0
      nVertices = 99
      shape = regular polygon...
      size = (4.5, 1.5)
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [frame N] = fixation_duration
      units = deg
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  Routine main_intro
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        np.random.seed(int(expInfo[ 'participant'])) # this needs to be tested
        #if int(expInfo[ 'eeg' ]):
        #    #if the library isn't in the path already
        #    #import sys
        #    #sys.path.append('/Users/tyrion/Documents/HaoTing/nbackmindwandering/src/pypixxlib-3.4.4448')
        #    #sys.path.append('/Users/tyrion/Documents/HaoTing/nbackmindwandering/src/pypixxlib-2.0.3917')
        #
        #    from pypixxlib.viewpixx import VIEWPixx3D
        ## enable ViewPixx3D pixel mode (demands firmware revision 31 or higher)
        #    my_device = VIEWPixx3D()
        #    my_device.dout.enablePixelMode()
        #    my_device.updateRegisterCache()

        # these values are used to set the RGB triggers
        #rgbValsRed = [0,2,4,8,16,32,64] # values taken by the green. Each one corresponding primarily to a specific routine in the task (e.g. ITI and 1; CUE and 4 ...)
        #rgbValsGreen = [0, 1,2,4,8,16,32,128] # values taken by the red. Each one corresponding primarily to a condition in the task (e.g. CUE_HIGH and 4; CUE_LOW and 16 ...)
        #rgbValsBlue = [0,1] # Values taken by blue.
        ## these values correspond to the trigger outputs for previously defined inputs
        #trigValOutGreen = [57, 25,17,41,89,105,121,81]
        #trigValOutRed = [57,59,60,62,61,63]
        #trigValOutBlue = [57, 185]
        # to get more information about the triggering consult ViewPixxEEG manual

        # from the ITI routine

        # set values for the staircase (to measure the point of subjective
        # equality (average of last 10 trials are used to set the individual
        # delta values for each participant):

        stairesN = 65 # in order to have equal number of repetitions in each condition keep it divisible by 4

        # srate == screen refresh
        srate = int(win.getActualFrameRate())# get the actual monitor fRate
        print('estimate frame rate: ' + str(srate))

        # save the selected frequencies to a variable
        high_freq = float(expInfo[ 'high' ])
        low_freq = float(expInfo[ 'low' ])

        # SET ROUTINE DURATIONS FOR ITI, CUE, PRED, STIM, FB

        cueDur = srate # 1 s

        # PERDICTION and ITI duration (based on screen refresh rate and
        # least common multiplier

        # ITI duration
        #if (120-srate) < 4:
        fix_durs = [60, 120, 180] # from 0.5 to 1.5 s
        pred_durs = [240,300,360,420,480, 600,720,840,960]
        lcm_frex = 60
        #elif (60-srate) < 4:
        #    fix_durs = [30, 60, 90]
        #    pred_durs =  [120,150,180,210,240,300,360,420,480]
        #    lcm_frex = 30
        #else:
        #    print('Check the refresh rate!')


        # predictionDur = int(2*srate)

        # STIM duration
        stim_duration = srate+lcm_frex

        # feedback duration
        fbDur=srate # 1 s


        # select random orientation for target gratings (different orientation for each)
        orients =  randint(1,360)
        annulusOri = orients + 90

        # set etalon opacity
        #opa1 = 0.4
        # equal opacity for the second grating at the beginning of the experiment
        #opa2 = 0.4
        # default opacities
        #opas_default = [opa1, opa2] # opas_default will remain the same throughout the experiment
        #opas = [opa1, opa2] # one of the elements in opas will change each trial (the value of
        # 'level' from the staircase will be added to it)

        # set etalon opacity
        cont1 = 0.4
        # equal opacity for the second grating at the beginning of the experiment
        cont2 = 0.4
        # default opacities
        conts_default = [cont1, cont1] # opas_default will remain the same throughout the experiment
        conts = [cont1, cont2] # one of the elements in opas will change each trial (the value of
        # 'level' from the staircase will be added to it)

        # size of the grating in degrees
        gabor_size = 2
        # gratings midpoint distance from the centre (radius of the circle in degrees)
        gabor_dist = 5
        # default sizes
        gsizes_default = [(gabor_size, gabor_size), (gabor_size, gabor_size)]

        # number of gratings in each arrey
        distractorN = 2
        contAnnulus = 0.4 # 0.5 # 0.7/2 #0.5 # opacity of the annulus is hard coded to 0.5 (0.4*0.5)
        opaTarget = 0.5# 0.625 # 0.875/2#0.625 (0.5*0.4)


        # build an arrey of gratings. this information will be sent
        # to the graphics card for better timing

        # these are the target gratings drawn in the STIM routine
        # colors, orientations, positions and opacities will be changing on each iteration.
        # everything else remains as it is defined here.
        # color variable will be used to give the gratings a desired flickering rate on each trial.
        gabors = visual.ElementArrayStim(win, units='deg', fieldPos=(0.0, 0.0),
        fieldSize=(20, 20), fieldShape='circle', nElements=2,
        sizes=gsizes_default, xys=[(-gabor_dist,0),(gabor_dist,0)], colors=([0.5, 0.5, 0.5]) ,
        colorSpace='rgb', opacities=opaTarget, oris=orients, sfs=2.0, contrs=conts_default,
        phases=0, elementTex='sin',elementMask='circle', texRes=128,
        interpolate=True, name=None, autoLog=None, maskParams=None)

        distractors = visual.ElementArrayStim(win, units='deg', fieldPos=(0.0, 0.0),
        fieldSize=(20, 20), fieldShape='circle', nElements=2,
        sizes=gsizes_default, xys=[(-gabor_dist,0),(gabor_dist,0)], colors=([0.5, 0.5, 0.5]) ,
        colorSpace='rgb', opacities=opaTarget, oris=orients, sfs=2.0, contrs=conts_default,
        phases=0, elementTex='sin',elementMask='circle', texRes=128,
        interpolate=True, name=None, autoLog=None, maskParams=None)

        # these are the large gratings drawn in all the routines
        # colors will be changing on each iteration.
        # everything else remains as it is defined here.
        # color variable will be used to give the two overlapping gratings different flickering rates.
        # note: the opacities of the lower and top gratings are 1 and 0.5 respectively.
        # LARGE
        gabors_large = visual.ElementArrayStim(win, units='deg', fieldPos=(0.0, 0.0),
        fieldSize=(30, 30), fieldShape='circle', nElements=distractorN,
        sizes=20, xys=[(0,0), (0,0)], colors=([0.5, 0.5, 0.5]) ,
        colorSpace='rgb', opacities=[1,0.5], oris=annulusOri, sfs=2.0, contrs=contAnnulus,
        phases=0, elementTex='sin',elementMask='circle', texRes=128,
        interpolate=True, name=None, autoLog=None, maskParams=None)


        # SMALL
        gabors_small = visual.ElementArrayStim(win, units='deg', fieldPos=(0.0, 0.0),
        fieldSize=(30, 30), fieldShape='circle', nElements=distractorN,
        sizes=7.5, xys=[(0,0), (0,0)], colors=([0.5, 0.5, 0.5]) ,
        colorSpace='rgb', opacities=[1, 0.5], oris=annulusOri, sfs=2.0, contrs=contAnnulus,
        phases=0, elementTex='sin',elementMask='circle', texRes=128,
        interpolate=True, name=None, autoLog=None, maskParams=None)

        # circle used to cover two larger gabors
        circle = visual.Circle(
        win=win,
        units="deg",
        radius=6.5,
        fillColor=[0, 0, 0],
        lineColor=None,
        edges=99
        )

        # gabor(s) used as fill-in's
        # contrast of the first grating will be set to zero if HIGH/LOW CUE
        gaborsMedium = visual.ElementArrayStim(win, units='deg', fieldPos=(0.0, 0.0),
        fieldSize=(30, 30), fieldShape='circle', nElements=2,
        sizes=13, xys=[(0,0), (0,0)], colors=([0.5, 0.5, 0.5]) ,
        colorSpace='rgb', opacities=[1, 0.5], oris=orients, sfs=2.0, contrs=contAnnulus,
        phases=0, elementTex='sin',elementMask='circle', texRes=128,
        interpolate=True, name=None, autoLog=None, maskParams=None)

        # thos is used to present the RGB trigger on screen
        # fillColor value will be changed based on the trial information
        #trigger = visual.Rect(win, units = 'norm', width=0.01, height=0.01,
        #autoLog=None, fillColor=[0, 0, 0], fillColorSpace='rgb255', lineColor=None, pos = [-1,1],
        #opacity = 1)

        # a function to draw the large gabors and fill-in on screen
        def drawGabors(expInfo,t,frameN, low_freq, high_freq, annulusOri,
                         cueText, fliCue,t1,t2):


            if expInfo['flickering cue'] == '1':
                flickering = True
            else:
                flickering = False  # binary


            if int(expInfo[ 'jumper' ]):
                # change the stimulus colour based on the desired frequency
                # where t is time, trial_freq is the frequency
                sine_high = sin(2*pi*(high_freq)*t)
                stimCol_high = [sine_high,sine_high,sine_high]# [x * sine_high for x in col]
                sine_low = sin(2*pi*(low_freq)*t)
                stimCol_low = [sine_low,sine_low,sine_low]#[x * sine_low for x in col]
                # update gratings
                gabors_large.colors=[stimCol_low, stimCol_high]
                gabors_small.colors=[stimCol_low, stimCol_high]
                # set positions
                gabors_large.oris=annulusOri
                gabors_small.oris=annulusOri
                # set contrast
                gabors_large.contrs=contAnnulus
                gabors_small.contrs=contAnnulus
                gabors_large.draw()
                if flickering and fliCue == 1 and frameN >= t1 and frameN <= t2:
                    if cueText == 'kiire':
                        gaborsMedium.colors = stimCol_high
                        gaborsMedium.contrs = [0, contAnnulus]
                    elif cueText == 'aeglane':
                        gaborsMedium.colors = stimCol_low
                        gaborsMedium.contrs = [0, contAnnulus]
                    elif cueText == '?':
                        gaborsMedium.colors = [stimCol_low, stimCol_high]
                        gaborsMedium.contrs = [contAnnulus, contAnnulus]
        #            # TRIGGER: start prediction (show on screen)
        #            triggers(expInfo, cueText, 2, 1)
                    gaborsMedium.oris = annulusOri+90
                    gaborsMedium.draw()
                elif int(expInfo[ 'medium gabor' ]):
                    gaborsMedium.oris = annulusOri
                    gaborsMedium.contrs = [contAnnulus, 0]
                    gaborsMedium.draw()
                else:
                    circle.draw()
                gabors_small.draw()

        ## this is a function used to draw the triggers
        #def triggers(expInfo, cueText,routine, resp, corr):
        #    if int(expInfo[ 'eeg' ]):
        #        my_device.updateRegisterCache()
        #    if not resp:
        #        if cueText == 'fast':
        #            msgTrigger = str(trigValOutRed[routine-1])
        #            trigRGB = [rgbValsRed[routine-1],0,0]
        #        elif cueText == 'slow':
        #            msgTrigger = str(trigValOutRed[routine+2])
        #            trigRGB = [rgbValsRed[routine+2],0,0]
        #        elif cueText == '?' and frex == 'low':
        #            msgTrigger = str(trigValOutGreen[routine])
        #            trigRGB = [0,rgbValsGreen[routine],0]
        #        elif cueText == '?' and frex == 'high':
        #            msgTrigger = str(trigValOutGreen[routine+3])
        #            trigRGB = [0,rgbValsGreen[routine+3],0]
        #    else:
        #        if corr:
        #            msgTrigger = str(trigValOutGreen[7])
        #            trigRGB = [0,rgbValsGreen[7],0]
        #        else:
        #            msgTrigger = str(trigValOutGreen[7])
        #            trigRGB = [4,rgbValsGreen[1],0]#28
        #    trigNum(win, msgTrigger)
        #    trigger.fillColor = trigRGB

        # the body of the trigNum function can be commented in to present
        # the trigger numbers in the uppermost left corner. these are the values
        # you should see in the EEG recording
        #def trigNum(win, msgTrigger):
        ##    trigNum = visual.TextStim(win, msgTrigger, pos=(-0.9, 0.9), units='norm',color=[1,1,1], colorSpace='rgb')
        ##    trigNum.draw()
        #    pass

        # EEG Set-up

        if expInfo['EEG'] == '1':
            print('set port')
            from psychopy import parallel
            if expInfo['Chemicum'] == '1':
                port = parallel.ParallelPort(address=0x378)
            else:
                port = parallel.ParallelPort(address=0x3FF8)
                port.setData(0)

        trigdic = {'kiire': '11', 'aeglane': '10', '?': '01', 'high': '1', 'low': '0', 'iti': '000', 'cue': '100', 'prediction': '010', 'stimStart': '001', 'respInCorr': '110', 'respCorr': '011', 'pause': '111'}

        #trigger = str()
        trigN = str()
        # trigN = '11'+ cue (2) + frex (1) + position (3)

        def sendTrigger(t, trigN, EEG):
            if EEG == '1':
                if t < 0.05 and t > 0:  # send trigger for 50 ms and do not send the trigger before next flip time
                    port.setData(int(trigN, 2))
        #            print(trigN)
                else:
                    pass
                    port.setData(0)
      Begin Routine:
        from psychopy import sound

        clock = core.Clock()
        # these are just for presenting instroctions and are not commented at the moment
        # same appliest to the whole introduction routine (also "each frame" and "end routine")

        introTextSize = 1
        introVol = 0
        introCounter = 0
        introMSG = []
        counter = 0
        musicStart = 99
        contIntro = conts_default
        contIntroBlip = [cont1, 1]
        shuffle(contIntroBlip)
        stimCol=0
        posYtext = 0
        introFrex = 4
        distrFrex = 15
        line = '-'
        sine = 0
        counterGo = 0
        introTxtCol = 'black'
        fill_in = 0
        keyDown = 0

        introTxt = 'Kui Sa pole kindel, millises võres muutus toimus, siis lähtu kõhutundest. Ilmselt märkasid, et võred ei seisa paigal, vaid vilguvad. Võredel on kaks kiirust. Vajuta klaviatuuril \"a\" või \"k\" tähte, et ekraanile esitatud võrede kiirust vahetada.'

        introTxt2 = 'Sellel lehel näed nelja väiksemat võret, mis paiknevad suuremate võrede sees olevas hallikas alas. Samamoodi kuvatakse võresid ka katse ajal.'

        introTxt2_1 = 'Vastamiseks on 3 sekundit. \n\n\
        Vastuse registreerumisest annab märku helitoon. Õige vastuse korral mängib programm kõrget ja vale vastuse korral madalat heli. Kõrge ja madala heli võrdlemiseks vajuta kordamööda tagasi ja edasi nooleklahve klaviatuuril.'

        pressLeft = visual.TextStim(win, "Eelmine",
        pos=(-0.7, -0.7), units='norm',color=[-1,-1,-1], height = 0.05,
        bold=True,colorSpace='rgb')

        pressRight = visual.TextStim(win, "Järgmine",
        pos=(+0.7, -0.7), units='norm',color=[-1,-1,-1], height = 0.05,
        bold=True, colorSpace='rgb')

        introText = visual.TextStim(win, introTxt,
        pos=(0, -5.5), units='deg',color=[-1,-1,-1], height = 1,
        bold=False, colorSpace='rgb',wrapWidth=25)

        introText2 = visual.TextStim(win, introTxt2,
        pos=(-17, 0), units='deg',color=[-1,-1,-1], height = 1,
        bold=False, colorSpace='rgb',wrapWidth=10)

        introText2_1 = visual.TextStim(win, introTxt2_1,
        pos=(17, 0), units='deg',color=[-1,-1,-1], height = 1,
        bold=False, colorSpace='rgb',wrapWidth=10)

        go = visual.TextStim(win, '',
        pos=(0, 0), units='deg',color=introTxtCol, height = 0.6,
        bold=False,  colorSpace='rgb')

        # circle used to cover two larger gabors
        introDot = visual.Circle(
        win=win,
        units="deg",
        radius=.15,
        fillColor=[0.25, 0.25, 0.25],
        lineColor=None,
        edges=99
        )

        introCue = visual.Polygon(win, edges=99, units = 'deg' , pos = (0,0),
        size = (3, 1.5), fillColor = (0.1,0.1,0.1), lineColor = None)


        # rotate gratings around the center if 'rotate positions' set 1
        if int(expInfo[ 'rotate positions' ]) == 1:
            center = [0,0] # relative center
            pos1 = [0,5] # coordinates for the first point
            pos2 = [0,-5] # coordinates for the second point
            pos1m = [center, pos1] # this will be multiplied with the rotation matrix
            pos2m = [center, pos2] # this will be multiplied with the rotation matrix
            angle = randint(45,135) # take random integer from 45 to 135
            theta = np.radians(angle) # convert to radians
            c, s = np.cos(theta), np.sin(theta)
            R = np.array(((c,-s), (s, c))) # rotation matrix
            pos1 = np.matmul(pos1m, R) # multiply first vector with rotation matrix
            pos2 = np.matmul(pos2m, R) # multiply second vector with rotation matrix
        #    gabors.xys = [pos1[1], pos2[1]] # extract x and y and update the gratings
        #    if angle < 55 | angle > 125:
        #        theta2 = [theta + pi/2.75, theta - pi/2.75] # convert to radians
        #        shuffle(theta2)
        #        theta2 = theta2[0]
        #    else:
        #        theta2 = theta + pi/2 # convert to radians
            if angle < 90:
                angle2 = randint(30,60)+angle
            else:
                angle2 = randint(-60,-30)+angle
        #    theta2 = theta + pi/3 * multi[0]
            theta2 = np.radians(angle2)
            c2, s2 = np.cos(theta2), np.sin(theta2)
            R2 = np.array(((c2,-s2), (s2, c2))) # rotation matrix
            pos12 = np.matmul(pos1m, R2) # multiply first vector with rotation matrix
            pos22 = np.matmul(pos2m, R2) # multiply second vector with rotation matrix
            distractors.xys = [pos12[1], pos22[1]] # [(0, 5), (0, -5)] #
      Each Frame:
        keys_resp_i = event.getKeys()

        if int(expInfo[ 'intro' ]):
            posYtext = 0
            if int(introCounter) == 0:
                introMSG = 'Tere tulemast! Täname, et otsustasid enda aega ja energiat meie uurimistöösse investeerida. Selleks hetkeks oled suure tõenäosusega juba läbi teinud tüütuvõitu elektroodide paigaldamise protseduuri.\n\
                \nAitäh kannatlikkuse eest!'
            elif int(introCounter) == 1:
                gabors.xys=[(-gabor_dist,-1),(gabor_dist,-1)]
                introMSG = 'Katses esitatakse ekraanile neli väikest võret ja üks neist võredest muudab lühikeseks ajahetkeks kontrasti. Sinu ülesandeks on vasaku või parema nooleklahviga märku anda, kas muutus toimus vastavalt vasakul või paremal pool ekraani. Kui vajutad klaviatuuril alla noolt, siis ilmuvad ekraanile katses kasutatavad võred. Üles ja alla noolt kordamööda vajutades näed ka, kuidas kontrasti muutus katses välja nägema hakkab. Pane tähele, et katse jooksul võib muutus olla vaevu märgatav ja seetõttu on hea, kui prooviksid tähelepanu kogu katse vältel katse juures hoida.'
                posYtext = 5.5
                if 'down' in keys_resp_i:
                    keyDown = 1
                    gabors.colors=stimCol
                    gabors.draw()
                elif keyDown:
                    gabors.colors=stimCol
                    gabors.draw()
                introText.draw()
        # target gratings will be presented if 'up' or 'down' pressed on keyboard
            elif int(introCounter) == 2:
                introMSG = ''
                introText2.draw()
                introText2_1.draw()
                drawGabors(expInfo,t, frameN,low_freq, high_freq, annulusOri, 'cueText', fill_in,frameN,frameN+srate)
                gabors.colors=stimCol
                gabors.xys = [pos1[1], pos2[1]]
                distractors.colors=stimCol2
                distractors.draw()
                gabors.draw()
                introDot.draw()
            elif int(introCounter) == 3:
                introMSG  = 'Me ei ütle sulle kummal ekraanipoolel muutus toimub, sest see teeks katse liiga lihtsaks ja läheks ka vastuollu meie uurimiseesmärkidega. Selle asemele vihjame hoopis, kas muutus toimub kiiresti või aeglaselt vilkuvate võrede hulgas. Kui tahaksid meenutada, kuidas kiiresti ja aeglaselt vilkuvad võred välja nägidki, siis liigu tagasi noolega esimesele slaidile, et kiirusi uue pilguga vaadata.\n\
                \nKatses on kolme tüüpi vihjeid. Kui vihjena kuvatakse sõna „kiire“, siis tähendab see, et muutus toimub kiiresti vilkuvate võrede hulgas. Sõna „aeglane“ omakorda aga seda, et muutus toimub aeglaselt vilkuvate võrede hulgas. Kui ekraanile ilmub küsimärk, siis tähendab see, et muutus võib toimuda nii kiiresti, kui aeglaselt vilkuvate võrede hulgas.'
            elif int(introCounter) == 4:
                introMSG = 'Olemegi peaaegu valmis alustama...\n\n\
                \nVeel vaid viimane palve. Palun väldi suuremaid liigutusi. Liigutused jätavad EEG signaali palju müra ja see raskendab saadud andmete analüüsi. Päris soolasambaks muutuda me ei palu ja mõned liigutused on katses ka möödapääsmatud (nt klaviatuuriklahvi vajutamine), kuid palume võimalusel asendi kohendamise või teiste suuremate liigutustega oodata pausini. Katses on kokku 9 pausi. Võta endale pausi ajal täpselt nii palju aega, et jaksaksid igas järgmises katseosas rahulikult ülesandele keskenduda.'
            elif int(introCounter) == 5:
                introMSG  = 'Pöördu palun katse läbiviija poole, et mõõtmine käivitada.\n\
                \nInstruktsioon oli küllalt pikk ja on loomulik, kui end veel mõnes katsega seonduvas aspektis ebakindlalt tunned. Aruta seda küsimust julgelt katse läbiviijaga, sest see tõstab potentsiaalselt nii tulevaste andmete kui katsekogemuse kvaliteeti.'
        else:
            introMSG = 'Siit edasi liikudes algab eksperiment.\n\
            \n Alustamiseks vajuta palun: \"g\"'

        if 'g' in keys_resp_i and (introCounter == 0 or introCounter == 5):
            introMSG = ''
            if not counterGo:
                ready = clock.getTime()
                counterGo = counterGo + 1
                introTextSize = 0.6
                introTxtCol = 'red'
                if int(expInfo[ 'sound' ]):
                    efl = sound.Sound(value="Efl", secs=0.1)
                    g = sound.Sound(value="G", secs=0.1)
                    g.play()
                    efl.play()
                    continueRoutine =  False
        elif 'left' in keys_resp_i and introCounter > 0:
            introCounter -= 1
            introFrex = low_freq
            if int(expInfo[ 'sound' ]):
                c = sound.Sound(value="C", secs=0.1)
                c.play()
        elif 'right' in keys_resp_i and introCounter < 5:
            introCounter +=  1
            introFrex = low_freq
            core.wait(0.2)
            if int(expInfo[ 'sound' ]):
                g = sound.Sound(value="A", secs=0.1)
                g.play()
        elif 'p' in keys_resp_i:
            introVol=0
        elif key_resp_intro.keys == 'up' and (int(introCounter) == 2 or int(introCounter) == 1):
            gabors.colors=stimCol
            gabors.contrs=contIntroBlip
            gabors.draw()
        elif key_resp_intro.keys == 'down' and (int(introCounter) == 2 or int(introCounter) == 1):
            gabors.colors=stimCol
            gabors.contrs=contIntro
            gabors.draw()
        elif (int(introCounter) == 2 or int(introCounter) == 1) and 'k' in keys_resp_i:
            introFrex = high_freq
            gabors.colors=stimCol
        elif (int(introCounter) == 2 or int(introCounter) == 1) and 'a' in keys_resp_i:
            introFrex = low_freq
            gabors.colors=stimCol
        elif 'c' in keys_resp_i and int(introCounter) == 2:
            fill_in = 1
            drawGabors(expInfo,t, frameN,low_freq, high_freq, annulusOri, 'cueText', fill_in,frameN,frameN+srate)

        if clock.getTime()  > 0.5 and counterGo < 2:
            pressLeft.draw()
            pressRight.draw()

        # change the stimulus colour based on the desired frequency
        # where t is time, trial_freq is the frequency
        sine = sin(2*pi*(introFrex)*t)
        stimCol = [sine,sine,sine]

        sine2 = sin(2*pi*(distrFrex)*t)
        stimCol2 = [sine2,sine2,sine2]
      End Routine:
        gabors.contrs=conts_default

        expStartTime = core.getTime()
        thisExp.addData('Exp time', expStartTime)
    KeyboardComponent key_resp_intro
      allowedKeys = 'left','right', 'p', 'up', 'down', 't', 'k', 'a', 'g','c'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_main_intro
      color = black
      letterHeight = 1
      pos [set every frame] = (0, posYtext)
      startVal [time (s)] = 0.0
      text [set every frame] = $introMSG
      units = deg
      wrapWidth = 35
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    TextComponent pageNr
      color = black
      letterHeight = 1
      pos = (0, -10.5)
      startVal [time (s)] = 0.0
      text [set every frame] = $line + str(introCounter) + line
      units = deg
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  Routine stim_s
    CodeComponent code_stim_2
      Code Type = Py
      Begin Experiment:
        # all the values taken by 'level' will be appended to this variable
        contr = []
        correctResps = []
      Begin Routine:
        # TRIGGER: start stim
        #triggers(expInfo, cueText, 3,0,0)


        # this sets the trial duration. stim_duration time will be extended
        # by lcm_frex and until the maximal duration has reached (~3 s).
        stim_duration  = srate + lcm_frex
        stim_duration2 = srate + lcm_frex

        # write orientations to the file
        thisExp.addData('orientation', orients)

        multi = [1, -1]
        shuffle(multi)

        # rotate gratings around the center if 'rotate positions' set 1
        if int(expInfo[ 'rotate positions' ]) == 1:
            center = [0,0] # relative center
            pos1 = [0,5] # coordinates for the first point
            pos2 = [0,-5] # coordinates for the second point
            pos1m = [center, pos1] # this will be multiplied with the rotation matrix
            pos2m = [center, pos2] # this will be multiplied with the rotation matrix
            angle = randint(45,135) # take random integer from 45 to 135
            theta = np.radians(angle) # convert to radians
            c, s = np.cos(theta), np.sin(theta)
            R = np.array(((c,-s), (s, c))) # rotation matrix
            pos1 = np.matmul(pos1m, R) # multiply first vector with rotation matrix
            pos2 = np.matmul(pos2m, R) # multiply second vector with rotation matrix
            gabors.xys = [pos1[1], pos2[1]] # extract x and y and update the gratings
        #    if angle < 55 | angle > 125:
        #        theta2 = [theta + pi/2.75, theta - pi/2.75] # convert to radians
        #        shuffle(theta2)
        #        theta2 = theta2[0]
        #    else:
        #        theta2 = theta + pi/2 # convert to radians
            if angle < 90:
                angle2 = randint(30,60)+angle
            else:
                angle2 = randint(-60,-30)+angle
        #    theta2 = theta + pi/3 * multi[0]
            theta2 = np.radians(angle2)
            c2, s2 = np.cos(theta2), np.sin(theta2)
            R2 = np.array(((c2,-s2), (s2, c2))) # rotation matrix
            pos12 = np.matmul(pos1m, R2) # multiply first vector with rotation matrix
            pos22 = np.matmul(pos2m, R2) # multiply second vector with rotation matrix
            distractors.xys = [pos12[1], pos22[1]] # [(0, 5), (0, -5)] #

        # opacities
        delta = level
        cont2 = cont1 + delta # opa1 is defined in ITI code component (see Begin Experiment)
        conts = [cont1, cont2]
        shuffle(conts)

        # save the angle of the  target position to the file
        if conts[0] == cont1:
            targetAngle = 180+angle
        else:
            targetAngle = angle

        thisExp.addData('target angle', targetAngle)
        thisExp.addData('trial_freq', trial_freq)

        # make the target gabors look the same at the beginning
        gabors.contrs= conts_default

        # get information about the correct key
        if conts[0] < conts[1]:
            corrKey = 'left'
            thisExp.addData('corrKey', 'left')
        else:
            corrKey = 'right'
            thisExp.addData('corrKey', 'right')

        # changeT defines the blip duration in screen frames from sixt of a
        # screen refresh rate to whole (0.2-1s from the start of the presentation)
        changeT = randint(srate/6,srate)

        # updating the orientations and opacities in target gabors
        gabors.oris = orients
        # distractors
        distractors.oris = orients


        # this value will be read by the drawGabors() function and enables fill-in cue
        # presentation if set to 1
        fliCue = 0

        # this bit is just for timing test
        lastT = 0
        #print('stim')

        sumOfCount = 0
        frameDurSum = 0
        soundNotPlayed = 1
      Each Frame:
        # this bit is just for timing test
        frameDuration = t - lastT
        lastT = t
        sumOfCount += 1
        frameDurSum +=  frameDuration

        ## change the trigger RGB based on if the response is recorded or not
        ## and if it was correct or not
        #if not resp_stim_staires.keys:
        ## TRIGGER: start stim
        #    triggers(expInfo, cueText, 3,0,0)
        #else:
        ## TRIGGER: response
        #    if resp_stim_staires.corr:
        #        triggers(expInfo, cueText, 3,1,1)
        #        if soundNotPlayed and int(expInfo[ 'sound' ]):
        #            g = sound.Sound(value="G", secs=0.1)
        #            g.play()
        #            soundNotPlayed = 0
        #    elif not resp_stim_staires.corr:
        #        triggers(expInfo, cueText, 3,1,0)
        #        if soundNotPlayed and int(expInfo[ 'sound' ]):
        #            c = sound.Sound(value="C", secs=0.1)
        #            c.play()
        #            soundNotPlayed = 0


        ## draw/send the trigger
        #if int(expInfo[ 'eeg' ]):
        #    trigger.draw()

        # Tartu

        # change the trigger RGB based on if the response is recorded or not
        # and if it was correct or not
        if not resp_stim_staires.keys:
        # TRIGGER: start stim
            trigN = '11'+ trigdic[cueText] + trigdic[frex] + trigdic['stimStart']
            sendTrigger(t, trigN, expInfo['EEG'])
        else:
        # TRIGGER: response
            if soundNotPlayed:
                    startTime = t
            if resp_stim_staires.corr:
                trigN = '11'+ trigdic[cueText] + trigdic[frex] + trigdic['respCorr']
                sendTrigger(t-startTime, trigN, expInfo['EEG'])
                if soundNotPlayed and int(expInfo[ 'sound' ]):
                    g = sound.Sound(value="A", secs=0.1)
                    g.play()
                    soundNotPlayed = 0
            elif not resp_stim_staires.corr:
                trigN = '11'+ trigdic[cueText] + trigdic[frex] + trigdic['respInCorr']
                sendTrigger(t-startTime, trigN, expInfo['EEG'])
                if soundNotPlayed and int(expInfo[ 'sound' ]):
                    c = sound.Sound(value="C", secs=0.1)
                    c.play()
                    soundNotPlayed = 0

        # keep looming for the duration of stim_duration2
        if int(expInfo[ 'looming fixation' ]):
            if t < stim_duration2/srate:
                fixSizeStim = (fixSize[0]+t/16, fixSize[1]+t/16)
        else:
            fixSizeStim = (0.3, 0.3)


        # change the stimulus colour based on the desired frequency
        # where t is time, trial_freq is the frequency
        sine = sin(2*pi*(trial_freq)*t)
        stimCol = [sine,sine,sine]

        # distractors
        sine_d = sin(2*pi*(dist_freq)*t)
        stimCol_d = [sine_d,sine_d,sine_d]


        # extend the duration by lcm until the response or the maximal duration has reached (~3 s)
        if not resp_stim_staires.keys and frameN >= stim_duration and stim_duration < (lcm_frex*6):
            stim_duration  = stim_duration+lcm_frex

        # draw the background gabors and fill-in (drawGabors() gets defined in ITI routine)
        drawGabors(expInfo,t,frameN, low_freq, high_freq, annulusOri,cueText, fliCue,0,stim_duration)

        # update gratings
        if frameN < stim_duration2:
            gabors.colors=stimCol
            distractors.colors=stimCol_d
            distractors.contrs=conts_default
        ##### make the blip happen
            if changeT <= frameN <= changeT+srate*0.2: #
                gabors.contrs=conts
            else:
                gabors.contrs=conts_default
            gabors.draw()
            distractors.draw()
      End Routine:
        # this bit is just for timing test
        refR = float(sumOfCount)/float(frameDurSum)
        #print(refR)
        thisExp.addData('stim refR', refR) # write average srate to the file

        # convert responses to 0 and 1 values, and write to the file

        if resp_stim_staires.keys == 'right':
            whichResponse = 1
        elif resp_stim_staires.keys == 'left':
            whichResponse = 0
        else:
            whichResponse = 'No response'

        # write to the file (changeT == time at which the blip happened)
        thisExp.addData('whichResponse', whichResponse)
        thisExp.addData('changeT', changeT)

        # save the RT taking blip time into accountt
        if not resp_stim_staires.keys:
            thisExp.addData('trueRT', 'no response')
        else:
            thisExp.addData('trueRT', resp_stim_staires.rt-changeT/srate)

        # keep all the levels used in the staircase
        contr.append(level)
        correctResps.append(resp_stim_staires.corr)
    KeyboardComponent resp_stim_staires
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $corrKey
      durationEstim = 1.5
      forceEndRoutine = False
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = stim_duration
      store = first key
      storeCorrect = True
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    PolygonComponent fix_stim_2
      durationEstim = 1.5
      fillColor = $[0.25,0.25,0.25]
      lineWidth = 0
      nVertices = 99
      shape = regular polygon...
      size [set every frame] = fixSizeStim
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = stim_duration
      units = deg
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  Routine cue_s
    CodeComponent code_cfi_2
      Code Type = Py
      Begin Experiment:
        import math
      Begin Routine:
        # shuffle prediction time durations
        # shuffle(pred_durs)
        pred_duration = pred_durs[0]
        # prepare the frequency information for this trial (based on the values defined
        # in the previous loop)
        if frex == 'high':
            trial_freq = high_freq
            dist_freq = low_freq
        elif frex == 'low':
            trial_freq = low_freq
            dist_freq = high_freq

        # write into the file
        thisExp.addData('cue', cueText) # cue name

        ## TRIGGER: start cue
        #triggers(expInfo, cueText, 1,0,0)

        # trig Tartu

        trigN = '11'+ trigdic[cueText] + trigdic[frex] + trigdic['cue']

        # this value will be read by the drawGabors() function and enables fill-in cue
        # presentation if set to 1
        fliCue = 1

        # this bit is just for timing test
        lastT = 0
        #print('cue')

        sumOfCount = 0
        frameDurSum = 0
      Each Frame:
        # this bit is just for timing test
        frameDuration = t - lastT
        lastT = t
        sumOfCount += 1
        frameDurSum +=  frameDuration

        ## TRIGGER: start cue (show on screen)
        #triggers(expInfo, cueText, 1,0,0)
        #
        ## draw/send the trigger
        #if int(expInfo[ 'eeg' ]):
        #    trigger.draw()

        # Tartu
        sendTrigger(t, trigN, expInfo['EEG'])

        # draw the background gabors and fill-in (drawGabors() gets defined in ITI routine)
        drawGabors(expInfo,t,frameN, low_freq, high_freq, annulusOri, cueText, fliCue,0,cueDur) # t1

        #cueText = frameN
      End Routine:
        # this bit is just for timing test
        refR = float(sumOfCount)/float(frameDurSum)
        #print(refR)
        thisExp.addData('cue refR', refR) # write average srate to the file
    PolygonComponent white_ellips_cfi_2
      durationEstim = 1
      fillColor = $[0.1,0.1,0.1]
      lineColor = $[0.8,0.8,0.8]
      lineWidth = 0
      nVertices = 99
      shape = regular polygon...
      size = (4.5,1.5)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = cueDur
      units = deg
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    TextComponent cue_txt_cfi_2
      color = $[0.75,0.75,0.75]
      durationEstim = 1
      letterHeight = 1
      opacity [set every frame] = 1
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [frame N] = cueDur
      text [set every repeat] = $cueText
      units = deg
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  Routine fb
    CodeComponent setMsg_fb
      Code Type = Py
      Begin Experiment:
        corr = [] # crashes if not defined in the beginning
      Begin Routine:
        # TRIGGER: feedback start
        triggers(expInfo, cueText, 4,0)

        incent = ' '

        # create msg for text element according to whether resp.corr is 1 or 0
        if not resp_stim.keys:
            msg = "X"
            msgColour = 'red'
            raffleIncent = False
        elif resp_stim.rt-changeT/srate < 0:
            msg = 'X'
            msgColour = 'red'
            raffleIncent = False
        elif resp_stim.corr:
            msg =  "{:.2f} s".format(resp_stim.rt-changeT/srate)
            msgColour = 'green'
            raffleIncent = True
        else:
            msg = "{:.2f} s".format(resp_stim.rt-changeT/srate)
            msgColour = 'red'
            raffleIncent = False

        # add or subtract rewards
        if raffleIncent and random() < 0.25:
            incent = randint(1,20)
            incentSum = incentSum + incent
            incent = "+" + str(incent)
            incentOpa = 1
            incentCol = [0.5,0.5,-1]
        elif not raffleIncent and random() < 0.25:
            incent = randint(1,20)*-1
            incentSum = incentSum + incent
            incent = str(incent)
            incentOpa = 1
            incentCol = [0,0.5,1]
        else:
            incentOpa = 1


        thisExp.addData('incentive', incent)

        # this value will be read by the drawGabors() function and enables fill-in cue
        # presentation if set to 1
        fliCue = 0

        # timing tests
        lastT = t
        #print('fb')
        sumOfCount = 0
        frameDurSum = 0
      Each Frame:
        # this bit is just for timing test
        frameDuration = t - lastT
        lastT = t
        sumOfCount += 1
        frameDurSum +=  frameDuration

        # TRIGGER: feedback start (show on screen)
        triggers(expInfo, cueText, 4,0)

        # draw/send the trigger
        if int(expInfo[ 'eeg' ]):
            trigger.draw()

        # draw the background gabors and fill-in (drawGabors() gets defined in ITI routine)
        drawGabors(expInfo,t, frameN, low_freq, high_freq, annulusOri, cueText, fliCue,0,fbDur)
      End Routine:
        # this bit is just for timing test
        refR = float(sumOfCount)/float(frameDurSum)
        #print(refR)
        thisExp.addData('fb refR', refR) # write average srate to the file
    PolygonComponent ellips_fb
      durationEstim = 1
      fillColor = $[0.1,0.1,0.1]
      lineColor = $[0.8,0.8,0.8]
      lineWidth = 0
      nVertices = 99
      shape = regular polygon...
      size = (3, 1.5)
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [frame N] = srate
      units = deg
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    TextComponent text_fb
      color [set every repeat] = $msgColour
      durationEstim = 1
      letterHeight = 0.8
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = srate
      text [set every repeat] = $msg
      wrapWidth = 20
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    TextComponent incent_fb
      color [set every repeat] = $incentCol
      durationEstim = 1
      letterHeight = 0.8
      opacity [set every repeat] = incentOpa
      pos = (1, 1)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = fbDur
      text [set every repeat] = $incent
      units = deg
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  Routine pause_s
    CodeComponent code_pause_2
      Code Type = Py
      Begin Experiment:
        pauseCounter = 0

        pauseMsg = ' '

        pauseMsgText = visual.TextStim(win, pauseMsg,
        pos=(0, -5.5), units='deg',color=[1,1,1], height = 1,
        bold=False, colorSpace='rgb', italic = True, wrapWidth=35)
      Begin Routine:
        ## trigger 27 is pause
        #trigRGB = [rgbValsRed[1], rgbValsGreen[1], rgbValsBlue[0]]
        #msgTrigger = '?'
        #trigger.fillColor = trigRGB

        # trig Tartu

        trigN = '11'+ trigdic[cueText] + trigdic[frex] + trigdic['pause']

        if trialCounter > 32:
        # only pause for a rest on every 30th trial:
            if  trialCounter %  30  !=  0: #
                continueRoutine =  False # so don’t run the pause routine this time.
            else:
                pauseCounter = pauseCounter + 1
        else:
            continueRoutine =  False


        pauseTxt = 'See on paus. Jätkamiseks vajuta palun nooleklahvi...\n\
        \nÕigete vastuste protsent: '

        pauseTxt2 = '\n\nHinnanguliselt on katse lõpuni jäänud veel umbes '

        soundNotPlayed = 1
        currentTime = core.getTime()
        timePassed = currentTime - expStartTime

        trialRatio = stairesN*4/(trialCounter) # thisN+1
        expDuration = trialRatio * timePassed
        timeLeft = round((expDuration - timePassed)/60)

        if pauseCounter == 1:
            expDuration += 3
      Each Frame:
        ## draw/send the trigger
        #if int(expInfo[ 'eeg' ]):
        #    trigger.draw()

        # Tartu
        sendTrigger(t, trigN, expInfo['EEG'])

        if int(pauseCounter) == 10:
            pauseMsg = 'Did you know?\n\n\
        \nThe first recording of a human electroencephalography is often attributed to a German psychiatrist Hans Berger, around 1920s. He is also well known for his discovery of the alpha wave or sometimes called \"Berger wave\". What is less known, is how he got involved with EEG in the first place. To be continued...'
            pauseMsgText.setText(pauseMsg)
            pauseMsgText.draw()
        elif int(pauseCounter) == 20:
            pauseMsg = 'Did you know?\n\n\
            \nThe story goes that Hans Berger got interested in EEG because he believed to have experienced spontaneous telepathy with her sister. He reasoned that if it was truly telepathy, recording the electrical activity of the brain might help to bring light to the mechanisms of it. Maybe this belief is to be blamed or something else, but his recordings of the alpha wave were left relatively unnoticed by other investigators for another decade or so. To be continued...'
            pauseMsgText.setText(pauseMsg)
            pauseMsgText.draw()
        elif int(pauseCounter) == 30:
            pauseMsg = 'Did you know?\n\n\
            \nHans Berger\'s work was later picked up by English investigator, Edgar Douglas Adrian, who was awarded for the Nobel prize with another investigator Sir Charles Sherrington, for their discoveries regarding the functions of neurons. One of the things that they investigated was all-or-nothing principle in the nerve cells.'
            pauseMsgText.setText(pauseMsg)
            pauseMsgText.draw()
        elif int(pauseCounter) == 40:
            pauseMsg = 'Did you know?\n\n\
            \nThe same guy, Edgar Douglas Adrian, who replicated Hans Berger\'s findings, was also involved in another matter close to the hearts of the researchers involved in the current experiment. He described something that in today\'s terms would be called \"steady-state visual evoked potentials\", which is a fancy term used to describe brains frequency specific response to a visual flicker.'
            pauseMsgText.setText(pauseMsg)
            pauseMsgText.draw()
        elif int(pauseCounter) == 50:
            pauseMsg = 'Did you know?\n\n\
            \nResearchers are using the Fourier transformation to analyse brain responses to the flickering stimuli, but also in more standard filtering. This method dates back to 19th century French mathematician, Jean-Baptiste Joseph Fourier. He came up with an idea that any signal could be represented as a collection of sinusoidal waves without losing any information. Or another way to think of it is that Fourier transformasion tells you what frequencies are present in your signal and in what proportions.'
            pauseMsgText.setText(pauseMsg)
            pauseMsgText.draw()
        elif int(pauseCounter) == 60:
            pauseMsg = 'Did you know?\n\n\
            \nFourier transformation, that at the time of Jean-Baptiste, attracted attention by few mathematics enthusiasts, is now widely used method for analysing signals across the disciplines, sprinkling from genetics to quantum mechanics, but has also found it\'s way into practical applications and gadgets that we use every day.'
            pauseMsgText.setText(pauseMsg)
            pauseMsgText.draw()
        elif int(pauseCounter) == 70:
            pauseMsg = 'Did you know?\n\n\
            \nThere are a huge number of nerve cells in the brain. According to best of our estimates, this number is around 86 billion (give or take 8 billion). It is often said, to bring that number into perspective, that this is about the same as the number of the stars in the Milky Way galaxy. Latest estimates taught us, that there might be up to 400 billion stars in our galaxy. So lets try to update the popular statement. There are up to as many stars in the Milky Way galaxy as there are nerve cells in the brains of you and your three friends combined. Sounds catchy, doesn\'t it? If you did the math, you found that there is a little miscalculation. I\'d take it as a compliment :)'
            pauseMsgText.setText(pauseMsg)
            pauseMsgText.draw()
        elif int(pauseCounter) == 80:
            pauseMsg = 'Did you know?\n\n\
            \nWelcome to the department of psychology at the University of York! The department holds it\'s roots in the year 1974 when Founding Head of Department Peter Venables appointed the first lecturers. He helped to pioneer the application of physiological measures to psychological problems, paving the way into the top class research in biological basis of psychology and behaviour. '
            pauseMsgText.setText(pauseMsg)
            pauseMsgText.draw()
    TextComponent text_pause_2
      color = black
      letterHeight = 1
      pos = (0, 5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pauseTxt + str(int(np.mean(correctResps)*100)) + str(' %') + pauseTxt2 + str(timeLeft) + str(' minutit')
      units = deg
      wrapWidth = 35
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    KeyboardComponent any_key_end_pause_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cue
    CodeComponent code_cfi
      Code Type = Py
      Begin Routine:
        # this loop will take values from exp_trials list based on the
        # trial number and assigns it to the corresponding task condition.
        if exp_trials[trials.thisN] == 1:
            frex = 'high'
            cueText = 'fast'
            delta = delta_high[count_fast]
            pred_duration = pred_durs_high[count_fast]
            count_fast = count_fast +1
        elif exp_trials[trials.thisN] == 2:
            frex = 'low'
            cueText = 'slow'
            delta = delta_low[count_slow]
            pred_duration = pred_durs_low[count_slow]
            count_slow = count_slow +1
        elif exp_trials[trials.thisN] == 3:
            frex = 'high'
            cueText = '?'
            delta = delta_high_rnd[count_fast_rnd]
            pred_duration = pred_durs_high_rnd[count_fast_rnd]
            count_fast_rnd= count_fast_rnd +1
        elif exp_trials[trials.thisN] == 4:
            frex = 'low'
            cueText = '?'
            delta = delta_low_rnd[count_slow_rnd]
            pred_duration = pred_durs_low_rnd[count_slow_rnd]
            count_slow_rnd = count_slow_rnd +1
        else:
            msg = ['Something went wrong']

        #  this value will be read by the drawGabors() function and enables fill-in cue presentation if set to 1
        fliCue = 1
        # TRIGGER: start cue
        triggers(expInfo, cueText, 1,0)

        thisExp.addData('cue', cueText)
        thisExp.addData('stage', 'experiment')
        thisExp.addData('pred_dur', pred_duration)

        # this bit is just for timing test
        lastT = t
        #print('cue')

        sumOfCount = 0
        frameDurSum = 0
      Each Frame:
        # this bit is just for timing test
        frameDuration = t - lastT
        lastT = t
        sumOfCount += 1
        frameDurSum += frameDuration

        #timing tests

        # TRIGGER: start cue (show on screen)
        # triggers(expInfo, cueText, 1,0)

        # draw/send the trigger
        if int(expInfo[ 'eeg' ]):
            trigger.draw()

        # draw the background gabors and fill-in (drawGabors() gets defined in ITI routine)
        drawGabors(expInfo,t, frameN, low_freq, high_freq, annulusOri,cueText, fliCue,0,cueDur)
      End Routine:
        # this bit is just for timing test
        refR = float(sumOfCount)/float(frameDurSum)
        #print(refR)
        thisExp.addData('cue refR', refR) # write average srate to the file
    PolygonComponent white_ellips_cfi
      durationEstim = 1
      fillColor = $[0.1,0.1,0.1]
      lineColor = $[0.8,0.8,0.8]
      lineWidth = 0
      nVertices = 99
      shape = regular polygon...
      size = (3,1.5)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = cueDur
      units = deg
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    TextComponent cue_txt_cfi
      color = $[0.75,0.75,0.75]
      durationEstim = 1
      letterHeight = 1
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = cueDur
      text [set every repeat] = $cueText
      units = deg
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  Routine stim
    CodeComponent code_stim
      Code Type = Py
      Begin Experiment:
        correctResps = []
      Begin Routine:
        # TRIGGER: start stim
        triggers(expInfo, cueText, 3,0)

        # this sets the trial duration. stim_duration time will be extended
        # by lcm_frex and until the maximal duration has reached (3 s).
        stim_duration  = srate + lcm_frex
        stim_duration2 = srate + lcm_frex


        # write to the file (delta value in percentage change)
        deltaP = deltaPercent[delta_orig.index(delta)]
        thisExp.addData('delta percent', deltaP)

        # set the random orientation for the gratings
        thisExp.addData('orientation', orients)
        # rotate gratings around the center if 'rotate positions' set 1
        if int(expInfo[ 'rotate positions' ]) == 1:
            center = [0,0] # relative center
            pos1 = [0,5] # coordinates for the first point
            pos2 = [0,-5] # coordinates for the second point
            pos1m = [center, pos1] # this will be multiplied with the rotation matrix
            pos2m = [center, pos2] # this will be multiplied with the rotation matrix
            angle = randint(45,135) # take random integer from 1 to 360
            theta = np.radians(angle) # convert to radians
            c, s = np.cos(theta), np.sin(theta)
            R = np.array(((c,-s), (s, c))) # rotation matrix
            pos1 = np.matmul(pos1m, R) # multiply first vector with rotation matrix
            pos2 = np.matmul(pos2m, R) # multiply second vector with rotation matrix
            gabors.xys = [pos1[1], pos2[1]] # extract x and y and update the gratings

        # opacities
        opa2 = opa1 + delta # opa1 is defined in ITI code component (see Begin Experiment)
        opas = [opa1, opa2]
        shuffle(opas)

        thisExp.addData('delta', delta)

        # save the angle of the  target position to the file
        if opas[0] == opa1:
            targetAngle = 180+angle
        else:
            targetAngle = angle

        thisExp.addData('target angle', targetAngle)

        # prepare the frequency information for this trial
        if frex == 'high':
            trial_freq = high_freq
        elif frex == 'low':
            trial_freq = low_freq
        elif frex == 'no':
            trial_freq = srate

        thisExp.addData('trial_freq', trial_freq)

        # define the correct keys for this trial
        gabors.opacities= opas_default # make them look different from the beginning
        if opas[0] < opas[1]:
            corrKey = 'left'
            thisExp.addData('corrKey', 'left')
        else:
            corrKey = 'right'
            thisExp.addData('corrKey', 'right')


        # changeT defines the blip duration in screen frames from sixt of a
        # screen refresh rate to double (0.2-2s from the start of the presentation)
        changeT = randint(srate/6,srate) # no need for this

        # updating the orientations and opacities
        gabors.oris = orients

        # this value will be read by the drawGabors() function and enables fill-in cue
        # presentation if set to 1
        fliCue = 0

        # this bit is just for timing test
        lastT = t
        #print('stim')
        sumOfCount = 0
        frameDurSum = 0
        soundNotPlayed = 1
      Each Frame:
        # this bit is just for timing test
        frameDuration = t - lastT
        lastT = t
        sumOfCount += 1
        frameDurSum +=  frameDuration
        #print(frameDuration)

        # change the trigger RGB based on if the response is recorded or not
        # and if it was correct or not
        if not resp_stim.keys:
        # TRIGGER: start stim
            triggers(expInfo, cueText, 3,0)
        else:
        # TRIGGER: response
            if resp_stim.corr:
                triggers(expInfo, cueText, 3,1)
                if soundNotPlayed:
                    c = sound.Sound(value="C", secs=0.1,volume = vol, hamming = True)
                    c.play()
                    soundNotPlayed = 0
            elif not resp_stim.corr:
                triggers(expInfo, cueText, 4,1)
                if soundNotPlayed:
                    g = sound.Sound(value="G", secs=0.1, volume = vol, hamming = True)
                    g.play()
                    soundNotPlayed = 0

        # draw/send the trigger
        if int(expInfo[ 'eeg' ]):
            trigger.draw()

        if int(expInfo[ 'looming fixation' ]):
            if t < stim_duration2/srate:
                fixSizeStim = (fixSize[0]+t/8, fixSize[1]+t/8)
        else:
            fixSizeStim = (0.3, 0.3)

        # change the stimulus colour based on the desired frequency
        # where t is time, trial_freq is the frequency
        sine = sin(2*pi*(trial_freq)*t)
        stimCol = [sine,sine,sine]

        # make the blip happen
        if changeT <= frameN <= changeT+srate*0.2:
            gabors.opacities=opas
        else:
            gabors.opacities=opas_default

        # extend the duration by lcm until the response or the maximal duration has reached (3 s)
        if not resp_stim.keys and frameN >= stim_duration and stim_duration < lcm_frex*6:
            stim_duration  = stim_duration+lcm_frex

        # draw the background gabors and fill-in (drawGabors() gets defined in ITI routine)
        drawGabors(expInfo,t, frameN, low_freq, high_freq, annulusOri, cueText, fliCue,0,stim_duration)

        # update gratings
        if frameN < stim_duration2:
            gabors.colors=stimCol
            gabors.draw()
      End Routine:
        # this bit is just for timing test
        refR = float(sumOfCount)/float(frameDurSum)
        #print(refR)
        thisExp.addData('stim refR', refR) # write average srate to the file

        # convert responses to 0 and 1 values, and write to the file

        if resp_stim.keys == 'right':
            whichResponse = 1
        elif resp_stim.keys == 'left':
            whichResponse = 0
        else:
            whichResponse = 'No response'

        # write to the file (changeT == time at which the blip happened)
        thisExp.addData('whichResponse', whichResponse)
        thisExp.addData('changeT', changeT)

        # save the RT taking blip time into accountt
        if not resp_stim.keys:
            thisExp.addData('trueRT', 'no response')
        else:
            thisExp.addData('trueRT', resp_stim.rt-changeT/srate)

        correctResps.append(resp_stim.corr)
    KeyboardComponent resp_stim
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $corrKey
      durationEstim = 1.5
      forceEndRoutine = False
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = stim_duration
      store = first key
      storeCorrect = True
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    PolygonComponent fix_stim
      durationEstim = 1.5
      fillColor = $[0.1,0.1,0.1]
      lineWidth = 0
      nVertices = 99
      shape = regular polygon...
      size [set every frame] = fixSizeStim
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = stim_duration
      units = deg
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  Routine block_intro
    CodeComponent intro_code_block
      Code Type = Py
      Begin Routine:
        # Present text at the beginning of each block
        if int(trials.thisN) == 0 and conditions == 'conditions3_vs_training':
            continueRoutine = True
            intro_txt = 'Training introduction. Press any key to continue...'
        elif int(trials.thisN) == 0 and conditions == 'conditions3_vs':
            intro_txt = 'Now starts the eperiment. Press any key to continue...'
            continueRoutine = True
        else:
            continueRoutine = False
    TextComponent intro_text_block
      letterHeight = 1
      startVal [time (s)] = 0.0
      text [set every repeat] = $intro_txt
      units = deg
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    KeyboardComponent any_key_end_block
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fb_s
    CodeComponent setMsg_fb_2
      Code Type = Py
      Begin Experiment:
        # all the values taken by 'level' will be appended to this variable
        contr = []

        incentCol = [0,0,0]

        # variables use to keep track of incentives
        incentOpa = 0
        incentSum = 0
        incent = 0
        incents = 0
        incentCounter = 0
      Begin Routine:
        # TRIGGER: feedback start
        triggers(expInfo, cueText, 4,0)
        incent = ' '

        # create msg for text element according to whether resp.corr is 1 or 0
        if not resp_stim_staires.keys:
            msg = "X"
            msg = stim_duration
            msgColour = 'red'
            raffleIncent = False
        elif resp_stim_staires.rt-changeT/srate < 0:
            msg = 'X'
            msgColour = 'red'
            raffleIncent = False
        elif resp_stim_staires.corr:
            msg =  "{:.2f} s".format(resp_stim_staires.rt-changeT/srate)
            msgColour = 'green'
            raffleIncent = True
            incentCounter = incentCounter + 1
        else:
            msg = "{:.2f} s".format(resp_stim_staires.rt-changeT/srate)
            msgColour = 'red'
            raffleIncent = False

        # add or subtract rewards
        if raffleIncent and random() < 0.25:
            incent = randint(1,20)
            incentSum = incentSum + incent
            incent = "+" + str(incent)
            incentOpa = 1
            incentCol = [0.5,0.5,-1]
        elif not raffleIncent and random() < 0.25:
            incent = randint(1,20)*-1
            incentSum = incentSum + incent
            incent = str(incent)
            incentOpa = 1
            incentCol = [0,0.5,1]
        else:
            incentOpa = 1

        # write to the file
        thisExp.addData('incentive', incent)

        # this value will be read by the drawGabors() function and enables fill-in cue
        # presentation if set to 1
        filCue = 0

        # this bit is just for timing test
        lastT = t
        #print('fb')

        sumOfCount = 0
        frameDurSum = 0

        soundPresented = 0
      Each Frame:
        # this bit is just for timing test
        frameDuration = t - lastT
        lastT = t
        sumOfCount += 1
        frameDurSum +=  frameDuration

        # TRIGGER: feedback start (show on screen)
        triggers(expInfo, cueText, 4,0)

        # draw/send the trigger
        if int(expInfo[ 'eeg' ]):
            trigger.draw()

        # draw the background gabors and fill-in (drawGabors() gets defined in ITI routine)
        drawGabors(expInfo,t,frameN, low_freq, high_freq, annulusOri, cueText, fliCue,0,fbDur)
      End Routine:
        # this bit is just for timing test
        refR = float(sumOfCount)/float(frameDurSum)
        #print(refR)
        thisExp.addData('fb refR', refR) # write average srate to the file

        # keep all the levels used in the staircase
        contr.append(level)
    PolygonComponent white_ellips_fb_2
      durationEstim = 1
      fillColor = $[0.1,0.1,0.1]
      lineColor = $[0.8,0.8,0.8]
      lineWidth = 0
      nVertices = 99
      shape = regular polygon...
      size = (3,1.5)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = cueDur
      units = deg
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    TextComponent text_fb_2
      color [set every repeat] = $msgColour
      durationEstim = 1
      letterHeight = 0.8
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = fbDur
      text [set every repeat] = $msg
      wrapWidth = 20
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    TextComponent incentAdd
      color [set every repeat] = $incentCol
      durationEstim = 1
      letterHeight = 0.8
      opacity [set every repeat] = incentOpa
      pos = (1, 1)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = fbDur
      text [set every repeat] = $incent
      units = deg
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  Routine bye
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        # trigger ??? is bye
        #trigRGB = [rgbValsRed[3], rgbValsGreen[3], 0]
        #msgTrigger = '???'
        #trigger.fillColor = trigRGB

        outroVol = 0

        outroTxt = 'Thank you for participation! \n\
        \nYou got a remarkable '

        outroTxt2 = ' % of correct trials.\n\nCongratulations!\n\
        \nThis work is a collaboration between the psychology departments of the University of York and the University of Tartu.\n\
        \nYork, 2019'


        expEndTime = core.getTime()
        thisExp.addData('Exp time', expEndTime)
      Each Frame:
        # draw/send the trigger
        #if int(expInfo[ 'eeg' ]):
        #    trigger.draw()
    TextComponent text
      color = black
      durationEstim = 2
      letterHeight = 0.075
      pos [set every frame] = (0, cos((t-12)/10)+tan((t-12)/10))
      startEstim = 0
      startVal [time (s)] = 0.0
      text [set every repeat] = $outroTxt + str(int(np.mean(correctResps)*100)) + outroTxt2
      units = norm
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine intro
    CodeComponent intro_code_int
      Code Type = Py
      Begin Experiment:
        import numpy.matlib

        import math
      Begin Routine:
        # trigger 9 will be sent out
        trigRGB = [rgbValsCondition[0], rgbValsRoutine[0], rgbValsResp[0]]
        msgTrigger = str(trigValOutRed[0]+trigValOutGreen[0]+trigValOutBlue[0])
        trigger.fillColor = trigRGB

        # Introduction text that is read by the intro_text component
        intro_txt = 'Press any key to continue the experiment...'

        # take the average of last 10 trials
        contr = list(dict.fromkeys(contr))
        fewLast = sum(contr[-10:])
        nResps = len(contr[-10:])
        level = fewLast/nResps

        # 0.38

        # define delta for each individual participant
        delta = [level*0.8, level*0.9, level, level*1.1, level*1.2, level*1.3]
        delta_orig = [level*0.8, level*0.9, level, level*1.1, level*1.15, level*1.2]
        deltaPercent = [-20, -10, 0, +10, +20, +30]


        #delta = [level*0.3, level*0.4, level*0.55, level*0.7, level*0.85, level]
        #delta_orig = [level*0.3, level*0.4, level*0.55, level*0.7, level*0.85, level]
        #deltaPercent = [-15, 0, 15, 30, 45, 60]



        nConds = 4
        nLevels = 6
        trialsPerCond = 10
        nTrials = trialsPerCond*nLevels*nConds

        # don't like this, but I don't know better way at the moment

        delta_low = np.repeat(delta,trialsPerCond)
        delta_high = np.repeat(delta,trialsPerCond)
        delta_low_rnd = np.repeat(delta,trialsPerCond)
        delta_high_rnd = np.repeat(delta,trialsPerCond)

        preDurN = math.ceil(nLevels*trialsPerCond/len(pred_durs))
        pred_durs_low = np.repeat(pred_durs,preDurN)
        pred_durs_high = np.repeat(pred_durs,preDurN)
        pred_durs_low_rnd = np.repeat(pred_durs,preDurN)
        pred_durs_high_rnd = np.repeat(pred_durs,preDurN)

        if preDurN*len(pred_durs) > nLevels*trialsPerCond:
            pred_durs_low = pred_durs_low[0:int(nLevels*trialsPerCond)]
            pred_durs_high = pred_durs_high[0:int(nLevels*trialsPerCond)]
            pred_durs_low_rnd = pred_durs_low_rnd[0:int(nLevels*trialsPerCond)]
            pred_durs_high_rnd = pred_durs_high_rnd[0:int(nLevels*trialsPerCond)]

        #pred_durs_low = np.repeat(pred_durs,trialsPerCond)
        #pred_durs_high = np.repeat(pred_durs,trialsPerCond)
        #pred_durs_low_rnd = np.repeat(pred_durs,trialsPerCond)
        #pred_durs_high_rnd = np.repeat(pred_durs,trialsPerCond)

        pred_durs_low = pred_durs_low.tolist()
        pred_durs_high = pred_durs_high.tolist()
        pred_durs_low_rnd = pred_durs_low_rnd.tolist()
        pred_durs_high_rnd = pred_durs_high_rnd.tolist()

        delta_low = delta_low.tolist()
        delta_high = delta_high.tolist()
        delta_low_rnd = delta_low_rnd.tolist()
        delta_high_rnd = delta_high_rnd.tolist()

        shuffle(delta_low)
        shuffle(delta_high)
        shuffle(delta_low_rnd)
        shuffle(delta_high_rnd)

        shuffle(pred_durs_low)
        shuffle(pred_durs_high)
        shuffle(pred_durs_low_rnd)
        shuffle(pred_durs_high_rnd)

        # delta_no = np.matlib.repmat(delta,1,nTrials)

        count_fast = 0
        count_slow = 0
        count_slow_rnd = 0
        count_fast_rnd = 0


        a = np.ones(math.ceil(trialsPerCond*nLevels))
        b = a+1
        c = a+2
        d = a+3


        exp_trials = np.concatenate((a,b,c,d))

        shuffle(exp_trials)

        soundNotPlayed = 1
      Each Frame:
        # draw/send the trigger
        if int(expInfo[ 'eeg' ]):
            trigger.draw()

        # incentSum
      End Routine:
        expStartTime = core.getTime()
    TextComponent intro_text_int
      letterHeight = 1
      startVal [time (s)] = 0.0
      text [set every repeat] = $intro_txt
      units = deg
      wrapWidth = 20
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    KeyboardComponent any_key_end_int
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pred_event_s
    CodeComponent code_prediction_2
      Code Type = Py
      Begin Experiment:
        # just to ensure that the cumulative duration of the prediction time would be
        # equal for all the conditions


        preDurN = math.ceil(float(stairesN)/len(pred_durs))
        pred_durs_low = np.repeat(pred_durs,preDurN)
        pred_durs_high = np.repeat(pred_durs,preDurN)
        pred_durs_low_rnd = np.repeat(pred_durs,preDurN)
        pred_durs_high_rnd = np.repeat(pred_durs,preDurN)

        pred_durs_low = pred_durs_low[0:int(stairesN)-5]
        pred_durs_high = pred_durs_high[0:int(stairesN)-5]
        pred_durs_low_rnd = pred_durs_low_rnd[0:int(stairesN)-5]
        pred_durs_high_rnd = pred_durs_high_rnd[0:int(stairesN)-5]

        pred_durs_low = pred_durs_low.tolist()
        pred_durs_high = pred_durs_high.tolist()
        pred_durs_low_rnd = pred_durs_low_rnd.tolist()
        pred_durs_high_rnd = pred_durs_high_rnd.tolist()

        shuffle(pred_durs_low)
        shuffle(pred_durs_high)
        shuffle(pred_durs_low_rnd)
        shuffle(pred_durs_high_rnd)

        training_low = pred_durs[0:5]
        shuffle(training_low)
        training_high = pred_durs[0:5]
        shuffle(training_high)
        training_low_rnd = pred_durs[0:5]
        shuffle(training_low_rnd)
        training_high_rnd = pred_durs[0:5]
        shuffle(training_high_rnd)

        training_low.extend(pred_durs_low)
        training_high.extend(pred_durs_high)
        training_low_rnd.extend(pred_durs_low_rnd)
        training_high_rnd.extend(pred_durs_high_rnd)

        pred_durs_low = training_low
        pred_durs_high = training_high
        pred_durs_low_rnd = training_low_rnd
        pred_durs_high_rnd = training_high_rnd

        # delta_no = np.matlib.repmat(delta,1,nTrials)

        count_fast = 0
        count_slow = 0
        count_slow_rnd = 0
        count_fast_rnd = 0
      Begin Routine:
        # TRIGGER: start prediction
        #triggers(expInfo, cueText, 2,0,0)

        # trig Tartu

        trigN = '11'+ trigdic[cueText] + trigdic[frex] + trigdic['prediction']

        # this value will be read by the drawGabors() function and enables fill-in cue
        # presentation if set to 1
        fliCue = 0

        # take a random duration from the durations in the pred_durs
        # shuffle(pred_durs)
        # pred_duration = int(pred_durs[0])

        # this bit is just for timing test
        lastT = 0
        #print('predict')

        sumOfCount = 0
        frameDurSum = 0


        # this loop will ensure that the cumulative duration of the prediction time would be
        # equal for all the conditions

        if label == 'high':
            pred_duration = pred_durs_high[count_fast]
            count_fast += 1
        elif label == 'low':
            pred_duration = pred_durs_low[count_slow]
            count_slow += 1
        elif label == 'high50':
            pred_duration = pred_durs_high_rnd[count_fast_rnd]
            count_fast_rnd += 1
        elif label == 'low50':
            pred_duration = pred_durs_low_rnd[count_slow_rnd]
            count_slow_rnd += 1
        else:
            print('Something went wrong with prediction durations')

        thisExp.addData('prediction duration', pred_duration)
      Each Frame:
        # this bit is just for timing test
        frameDuration = t - lastT
        lastT = t
        sumOfCount += 1
        frameDurSum +=  frameDuration

        ## TRIGGER: start prediction (show on screen)
        #triggers(expInfo, cueText, 2,0,0)
        #
        ## draw/send the trigger
        #if int(expInfo[ 'eeg' ]):
        #    trigger.draw()

        # Tartu
        sendTrigger(t, trigN, expInfo['EEG'])

        # draw the prediction time fixation
        if int(expInfo[ 'looming fixation' ]):
            fixSize = (t/8, t/8)
        else:
            fixSize = (0.3, 0.3)

        # draw the background gabors and fill-in (drawGabors() gets defined in ITI routine)
        drawGabors(expInfo,t, frameN, low_freq, high_freq, annulusOri, cueText, fliCue,0,pred_duration) # predictionDur
      End Routine:
        # this bit is just for timing test
        refR = float(sumOfCount)/float(frameDurSum)
        #print(refR)
        thisExp.addData('prediction refR', refR) # write average srate to the file
    PolygonComponent fix_prediction_2
      durationEstim = 2
      fillColor = $[0.25,0.25,0.25]
      lineWidth = 0
      nVertices = 50
      shape = regular polygon...
      size [set every frame] = fixSize
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = pred_duration
      units = deg
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  Routine cont_calibration
    CodeComponent cont_cal
      Code Type = Py
      Begin Routine:
        juku = 0

        wos = visual.TextStim(win, '',
        pos=(0, 0), units='deg',color=introTxtCol, height = 0.6,
        bold=False,  colorSpace='rgb')

        mouse = event.Mouse(win=win)
      Each Frame:
        wheel = mouse.getWheelRel()

        if cont_calib.keys == 'left':

            if  wheel[1] and contrasts[1] <= 1 and contrasts[1] >= 0:
                juku = wheel[1]/100
                contrasts = [contrasts[0], contrasts[1]+juku]
                wos.setText(str(round(contrasts[1],2)))
            elif wheel[1] and contrasts[1] > 1:
                contrasts[1] = 1
            elif wheel[1] and contrasts[1] < 0:
                contrasts[1] = 0
        elif cont_calib.keys == 'right':

            if  wheel[1] and spatialfs <= 3 and spatialfs >= 0:
                juku = wheel[1]/100
                spatialfs = spatialfs+juku
                wos.setText(str(round(spatialfs,2)))
            elif wheel[1] and spatialfs[1] > 3:
                spatialfs[1] = 5
            elif wheel[1] and spatialfs[1] < 0:
                spatialfs[1] = 0
            distractors.sfs = spatialfs


        wos.draw()


        # change the stimulus colour based on the desired frequency
        # where t is time, trial_freq is the frequency
        sineLow = sin(2*pi*(low_freq)*t)
        stimColLow = [sineLow,sineLow,sineLow]


        sineHigh = sin(2*pi*(high_freq)*t)
        stimColHigh = [sineHigh,sineHigh,sineHigh]

        calCols = [stimColLow, stimColHigh]

        gabors.colors=calCols[0]
        distractors.colors = calCols[1]
        gabors.contrs = [contrasts[0], 0]#
        distractors.contrs = [0, contrasts[1]]
        gabors.draw()
        distractors.draw()
    KeyboardComponent cont_calib
      allowedKeys = 'space', 'left', 'right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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Flow
  Routine main_intro
  LoopInitiator trials_2 loopType="MultiStairHandler"
    conditionsFile = conditions_quest.xlsx
    loopType = interleaved staircases
    nReps = stairesN
    stairType = QUEST
    switchMethod = random
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    conditions:
      [{'startVal': 0.3, 'startValSd': 0.15, 'pThreshold': 0.7, 'cueText': 'aeglane', 'frex': 'low', 'label': 'low'},
      {'startVal': 0.3, 'startValSd': 0.15, 'pThreshold': 0.7, 'cueText': 'kiire', 'frex': 'high', 'label': 'high'},
      {'startVal': 0.3, 'startValSd': 0.15, 'pThreshold': 0.7, 'cueText': '?', 'frex': 'low', 'label': 'low50'},
      {'startVal': 0.3, 'startValSd': 0.15, 'pThreshold': 0.7, 'cueText': '?', 'frex': 'high', 'label': 'high50'}]
    Routine ITI
    Routine cue_s
    Routine pred_event_s
    Routine stim_s
    Routine pause_s
  LoopTerminator trials_2
  Routine bye
